normalA(x)=(1/(sigmaN*sqrt(2*pi)))*exp(-(1/2)*(((x-mu)/sigmaN)^2))
ratio(x,y)=normalA(x)/normalA(y)

angle(t) = slope*t+intercept
input(t) = 0.4 + .0005*flr(t/100000)

El1 = max(((input(t)+n1)^nm - wo*Ivr-wo*Ivf),0) * max((1+wa*Ra1),0)

Er2 = max(((input(t)+n2)^nm - wo*Ivl-wo*Ivf),0) * max((1+wa*Ra2),0)

Ef =  max((((input(t)*2)*(0.3+(0.2*ratio(angle(t),angleC)))+nf)^nm - wo*Ivl-wo*Ivr),0) * max((1+wa*Raf),0)


Sm = El1+Er2+Ef

dn1/dt = (-n1 + (sigmaOU*noiseMult)*sqrt(2*(taun*noiseTime))*normal(0,1))/(taun*noiseTime)
dn2/dt = (-n2 + (sigmaOU*noiseMult)*sqrt(2*(taun*noiseTime))*normal(0,1))/(taun*noiseTime)
dnf/dt = (-nf + (sigmaOU*noiseMult)*sqrt(2*(taun*noiseTime))*normal(0,1))/(taun*noiseTime)

dRl1/dt=(-Rl1+((alpha*El1)/(Sm+Hl1^nm + sigma^nm)))/(taus*multiplier)
dHl1/dt = (-Hl1 + wh*Rl1)/(tauh*multiplier)

dRr2/dt=(-Rr2+((alpha*Er2)/(Sm+Hr2^nm + sigma^nm)))/(taus*multiplier)
dHr2/dt = (-Hr2 + wh*Rr2)/(tauh*multiplier)

dRf/dt = (-Rf+((alpha*Ef)/(Sm+Hf^nm + sigma^nm)))/(taus*multiplier)
dHf/dt = (-Hf + wh*Rf)/(tauh*multiplier)

Eb1 = (Rl1)^n
Sb1 = Eb1
dRb1/dt = (-Rb1 + Eb1/(Sb1 + Hb1^n +sigma^n))/(taus*multiplier)
dHb1/dt = (-Hb1 + wh*Rb1)/(tauh*multiplier)

Eb2 = (Rr2)^n
Sb2 = Eb2
dRb2/dt = (-Rb2 + (Eb2)/(Sb2 + Hb2^n +sigma^n))/(taus*multiplier)
dHb2/dt = (-Hb2 + wh*Rb2)/(tauh*multiplier)

Ebf = (Rf)^n
Sbf = Ebf
dRbf/dt = (-Rbf + (Ebf)/(Sbf + Hbf^n +sigma^n))/(taus*multiplier)
dHbf/dt = (-Hbf + wh*Rbf)/(tauh*multiplier)

Ea1 = sign(Rb1-Rb2-Rbf)*(abs(Rb1-Rb2-Rbf))^n
Ea2 = sign(Rb2-Rb1-Rbf)*(abs(Rb2-Rb1-Rbf))^n
Eaf = sign(Rbf-Rb1-Rb2)*(abs(Rbf-Rb1-Rb2))^n


aux angleVal = input(t)

fireRate1 = Ea1/( (abs(Rb1-Rb2-Rbf))^n + (abs(Rb2-Rb1-Rbf))^n + (abs(Rbf-Rb1-Rb2))^n + sigmaA^n)
fireRate2 = Ea2/( (abs(Rb1-Rb2-Rbf))^n + (abs(Rb2-Rb1-Rbf))^n + (abs(Rbf-Rb1-Rb2))^n + sigmaA^n)
fireRate3 = Eaf/( (abs(Rb1-Rb2-Rbf))^n + (abs(Rb2-Rb1-Rbf))^n + (abs(Rbf-Rb1-Rb2))^n + sigmaA^n)

dRa1/dt = (-Ra1 + fireRate1)/(taua*multiplier)
dRa2/dt = (-Ra2 + fireRate2)/(taua*multiplier)
dRaf/dt = (-Raf + fireRate3)/(taua*multiplier)


## Full equations above, but Rol2 ands Ror1 zeroed out
## due to zero inputs Dl2 and Dr1. Didn't work with above
Eol1 = (max((Rl1),0))^n
Eor2 = (max((Rr2),0))^n
Eof =  (max((Rf),0))^n
dIvl/dt = (-Ivl + Eol1/(Eol1+sigma^n))/(tauo*multiplier)
dIvr/dt = (-Ivr + Eor2/(Eor2+sigma^n))/(tauo*multiplier)
dIvf/dt = (-Ivf + Eof/(Eof+sigma^n))/(tauo*multiplier)



param multiplier = 3
param noiseTime = 1
param noiseMult = 1

param sigmaOU = 0.01
param slope = 0
param intercept = 60
param phi = 0
param Amp = 50
param b = 30000
param mu=0
param angleC=30
param sigmaN = 25.2
param taua=150, tauo=20, taus=5, tauh=2000*multiplier, taun=100
param sigma=0.5, sigmaA=.2, alpha=2
param wh=2, wo=.65, wa=.6
param nm=1, n=2
#param input = .5
param inputR=.5,inputF =.3, Dl2=0, Dr1=0
param variance = 0.01
init RL1=.1, RR2=.102, RF=.101
done
